CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:ScaledProbabilities
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    Set intensity range from:Image bit-depth
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:ScaledProbabilities
    Conversion method:Split
    Image type:Channels
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    Channel count:3
    Channel number:1
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    Image name:ScaledNucleus
    Channel number:2
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    Image name:ScaledCytoplasm
    Channel number:3
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    Image name:ScaledBackground

ImageMath:[module_num:6|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ScaledNucleusPlusScaledCytoplasm
    Image or measurement?:Image
    Select the first image:ScaledNucleus
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:ScaledCytoplasm
    Multiply the second image by:1.0
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
Smooth:[module_num:7|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
    Select the input image:ScaledNucleus
    Name the output image:SmoothScaledNucleus
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:5
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:SmoothScaledNucleus
    Name the primary objects to be identified:ScaledNucleus
    Typical diameter of objects, in pixel units (Min,Max):8,25
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
MeasureObjectSizeShape:[module_num:9|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
    Select object sets to measure:ScaledNucleus
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:10|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
    Select the objects to filter:ScaledNucleus
    Name the output objects:FilteredScaledNucleus
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:5
    Filter using a maximum measurement value?:No
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
IdentifySecondaryObjects:[module_num:11|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
    Select the input objects:FilteredScaledNucleus
    Name the objects to be identified:ScaledCellSecondary
    Select the method to identify the secondary objects:Propagation
    Select the input image:ScaledNucleusPlusScaledCytoplasm
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:ScaledCell
    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0, 1.0
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    Log transform before thresholding?:No
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
ResizeObjects:[module_num:12|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
    Select the input object:ScaledCellSecondary
    Name the output object:Cell
    Method:Factor
    Factor:0.5
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
ConvertObjectsToImage:[module_num:13|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
    Select the input objects:Cell
    Name the output image:Cell
    Select the color format:uint16
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
SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:Cell
    Select method for constructing file names:From image filename
    Select image name for file prefix:ScaledProbabilities
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|/home/steinbock
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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